Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img8.png % % B B 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img1.png % % C C 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img4.png % % D D 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img7.png % % E E 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img6.png % % F F 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img3.png % % G G 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img9.png % % H H 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img2.png % % I I 1 D:\Universidad%20-%20Bioingenieria\Proyecto%20Final\Cognitask/calibracion/tarea%202/img5.png % % // speller target properties
Application:Speller string TextToSpell= BHFCIEDAG // character or string to spell in offline copy mode